PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = rhythm_trial_exp
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent cross_white_2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent cross_colored
      fillColor = -0.0039, 1.0000, 0.6627
      lineColor = 0.0000, 0.0000, 0.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 11
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    KeyboardComponent key_resp
      allowedKeys = 'b', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 11
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    CodeComponent cross_manage
      Code Type = Py
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      Begin Routine:
        core.wait(1)
        cross_white.setAutoDraw(True)
        win.flip()
      End Routine:
        core.wait(1)
        cross_white.setAutoDraw(False)
        win.flip()
    CodeComponent sound_stim
      Code Type = Py
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      Before Experiment:
        import sys
        sys.path.append("./pkgs")

        from rhythm_trial_code.main import run_stim
        sound_stim_routine_index = 0
        import numpy as np
        np.random.seed(1)
        delay_series = np.random.normal(loc=0, scale=0.3, size=300).clip(-0.2, 0.2)
        scale_series = 1 + np.random.normal(loc=0, scale=0.3, size=300)
      Begin Routine:
        #cross.setAutoDraw(True)
        delay = delay_series[sound_stim_routine_index]
        scale = scale_series[sound_stim_routine_index]
        run_stim(delay=delay, scale=scale, stim_sound_file='./sound/SD0050.WAV')
        trials.addData('stim.delay', delay)
        trials.addData('stim.scale', scale)
        sound_stim_routine_index += 1
  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction
    TextComponent text_norm
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        リズム実験（テスト）

        クロスが表示されたあとにキーボードで回答
        Probe Toneが早ければb
        遅ければn

        Spaceで開始
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine ending_message
    TextComponent text_norm_3
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 実験はこれで終了です
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine break_section
    TextComponent text_norm_2
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        休憩

        Spaceで再開
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine fixation_cross
    PolygonComponent cross_white
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instruction
  Routine blank
  LoopInitiator session loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine fixation_cross
      Routine trial
    LoopTerminator trials
    Routine break_section
    Routine blank
  LoopTerminator session
  Routine ending_message
